(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingImageDimension 3)
(UseDirectionCosines "true")

// **************** Main Components **************************
(Registration "MultiMetricMultiResolutionRegistration")
(Interpolator "BSplineInterpolator" "BSplineInterpolator")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(FixedImagePyramid "FixedSmoothingImagePyramid" )
(MovingImagePyramid "MovingSmoothingImagePyramid" "MovingSmoothingImagePyramid")
(Optimizer "AdaptiveStochasticGradientDescent")
(Transform "BSplineTransform")
(Metric "AdvancedMattesMutualInformation" "AdvancedMattesMutualInformation")
(MaximumNumberOfSamplingAttempts 10)
// ******************** Multiresolution **********************
(NumberOfResolutions 2 )
(ImagePyramidSchedule 2 2 1  1 1 1 )

// ***************** Transformation **************************
(FinalGridSpacingInPhysicalUnits 85 )
(AutomaticScalesEstimation "true")
(AutomaticTransformInitialization "true")
(HowToCombineTransforms "Compose")

// ******************* Similarity measure *********************
(Metric0Weight 0.67 )
(Metric1Weight 0.33 )
(NumberOfHistogramBins 32 )
(ErodeMask "false")

// ******************* Optimizer ****************************
(MaximumNumberOfIterations 1000)

// **************** Image sampling **********************
(NumberOfSpatialSamples 4000 )
(NewSamplesEveryIteration "true")
(ImageSampler "RandomCoordinate" "RandomCoordinate")
(CheckNumberOfSamples "true")

// ************* Interpolation and Resampling ****************
(BSplineInterpolationOrder 1)
(FinalBSplineInterpolationOrder 3)
(DefaultPixelValue 0)
(WriteResultImage "true")
(ResultImagePixelType "float")
(ResultImageFormat "nii.gz")
